<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="jp.riken" Category="ardea"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>LabwareService</Identifier>
  <DisplayName>Labware Service</DisplayName>
  <Description>
    Ardea labware handling: pick and put a labware by orchestrating the DENSO robot
    (b-CAP tasks) and the KEYENCE hand (KV COM+). Each command runs the approach
    task, actuates the hand (close for pick, open for put), runs the retract task,
    and confirms the robot returned to the retract pose. Both commands end at the
    retract pose: PutLabware does not return the robot to the base pose, so a Pick
    following a Put does not have to undo that move. PickLabware may start at either
    the base or the retract pose (from the base pose it moves to the retract pose
    first); PutLabware requires the retract pose. Neither command moves the carriage.
  </Description>

  <!-- Commands -->
  <Command>
    <Identifier>PickLabware</Identifier>
    <DisplayName>Pick Labware</DisplayName>
    <Description>
      Pick a labware: verify the robot is at the base or the retract pose and, from
      the base pose, move it to the retract pose (which is where the approach task
      starts); then run the pick-approach task, close the hand, run the pick-retract
      task (which returns the robot to the retract pose), and confirm the retract
      pose. Intermediate responses report the current phase.
    </Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>AtRetractPose</Identifier>
      <DisplayName>At Retract Pose</DisplayName>
      <Description>True if the robot ended at the retract pose after the pick.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the pick sequence.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>RobotNotAtBasePose</Identifier>
      <Identifier>NoStationAtPosition</Identifier>
      <Identifier>HandNotOpen</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>GraspFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <Command>
    <Identifier>PutLabware</Identifier>
    <DisplayName>Put Labware</DisplayName>
    <Description>
      Place a labware: verify the robot is at the retract pose (not the base pose),
      run the approach task, open the hand, run the retract task (robot to the retract
      pose) and confirm the retract pose. The robot is left there — it is not returned
      to the base pose, so a PickLabware at this station can start straight away.
      Intermediate responses report the current phase.
    </Description>
    <Observable>Yes</Observable>
    <Response>
      <Identifier>AtRetractPose</Identifier>
      <DisplayName>At Retract Pose</DisplayName>
      <Description>True if the robot ended at the retract pose after the put.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>Phase</Identifier>
      <DisplayName>Phase</DisplayName>
      <Description>The current phase of the put sequence.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>RobotNotAtRetractPose</Identifier>
      <Identifier>NoStationAtPosition</Identifier>
      <Identifier>PoseNotRestored</Identifier>
      <Identifier>ControllerConnectionError</Identifier>
      <Identifier>RobotAccessError</Identifier>
      <Identifier>TaskExecutionTimeout</Identifier>
      <Identifier>TaskAccessError</Identifier>
      <Identifier>PlcConnectionError</Identifier>
      <Identifier>PlcAccessError</Identifier>
      <Identifier>HandError</Identifier>
      <Identifier>GraspFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>

  <!-- Command execution errors -->
  <DefinedExecutionError>
    <Identifier>RobotNotAtRetractPose</Identifier>
    <DisplayName>Robot Not At Retract Pose</DisplayName>
    <Description>The robot is not at the retract pose, which PutLabware requires (the base pose is not allowed).</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotNotAtBasePose</Identifier>
    <DisplayName>Robot Not At Base Pose</DisplayName>
    <Description>The robot is at neither of the two poses PickLabware can start from (the station direction's base pose or retract pose). The identifier is kept for compatibility; it no longer means "the retract pose is not allowed".</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>NoStationAtPosition</Identifier>
    <DisplayName>No Station At Position</DisplayName>
    <Description>No station is defined at the current carriage position, so Pick/Put cannot resolve which task pair to run.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandNotOpen</Identifier>
    <DisplayName>Hand Not Open</DisplayName>
    <Description>The hand is not fully open; PickLabware requires the hand open before starting.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PoseNotRestored</Identifier>
    <DisplayName>Pose Not Restored</DisplayName>
    <Description>The robot did not reach the retract pose: after a pick-retract or put-retract task, or before the pick approach when it had to be moved there from the base pose.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>ControllerConnectionError</Identifier>
    <DisplayName>Controller Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the robot controller over b-CAP.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>RobotAccessError</Identifier>
    <DisplayName>Robot Access Error</DisplayName>
    <Description>Failed to acquire the robot or read the current joint angles.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskExecutionTimeout</Identifier>
    <DisplayName>Task Execution Timeout</DisplayName>
    <Description>A DENSO task (PAC program) did not start or finish within the configured timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>TaskAccessError</Identifier>
    <DisplayName>Task Access Error</DisplayName>
    <Description>A DENSO task failed to run or stopped abnormally.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PlcConnectionError</Identifier>
    <DisplayName>PLC Connection Error</DisplayName>
    <Description>Failed to connect to or communicate with the PLC over KV COM+.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PlcAccessError</Identifier>
    <DisplayName>PLC Access Error</DisplayName>
    <Description>Failed to read or write a PLC device.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandError</Identifier>
    <DisplayName>Hand Error</DisplayName>
    <Description>The hand failed to activate or to complete a chuck/unchuck within the timeout.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>GraspFailed</Identifier>
    <DisplayName>Grasp Failed</DisplayName>
    <Description>Grasp verification failed: PickLabware did not grasp a labware (hand closed fully = empty), or PutLabware was not holding a labware to place.</Description>
  </DefinedExecutionError>
</Feature>
